par S=0.2, M = 0

# HNF4A
# Time scale for rate of change, Steepness of soft-heaviside function, Basal coefficient
par beta_hnf=1, delta_hnf=8, whnf_0=0.3
# Coefficient for inhibition of HNF4A by Cyclin D/by proliferatory signal S, Coefficient for activation of HNF4A by compensatory signal M
par whnf_cycd=-1.2, ws_hnf=-1, wm_hnf = 1

# Cyclin D 
# Time scale for rate of change, Steepness of soft-heaviside function, Basal coefficient, Coefficient for activation of Cyclin D by Myc
par beta_cycd=1, delta_cycd=8, wcycd_0=-0.5, wcycd_myc=1.1

# Myc: Steepness of soft-heaviside function, Coefficient for inhibition of Myc by HNF4A
par delta_myc=8, wmyc_hnf=-0.5

HNF4A'= beta_hnf*(fhnf - HNF4A)

CyclinD' = beta_cycd*(fcycd - CyclinD)

fhnf = 1/(1 + exp(-delta_hnf*(ws_hnf*S + wm_hnf*M + whnf_0 + whnf_cycd*CyclinD)))

Myc = 1/(1 + exp(-delta_myc*(wmyc_hnf*HNF4A)))

fcycd = 1/(1 + exp(-delta_cycd*(wcycd_0 + wcycd_myc*Myc)))





